<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindForceForagingDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BlockLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisBlock</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>CurrentTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>BlockLength</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>TrialBluePrint</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>SampleTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p2:Unit">
              <rx:Name>TrialUpdated</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumberInBlock</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisBlock</Name>
            </Expression>
            <Expression xsi:type="p1:MatchBlockStatistics">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockGenerator" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>BlockGenerator</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TrialStatistics</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialBluePrint</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentTrial</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>BlockSize</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ToInt32</scr:Name>
                    <scr:Expression>Convert.ToInt32(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BlockLength</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsBaited</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsBaitedMode</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumberInBlock</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialUpdated</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:MatchBlockStatistics">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Block" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Block</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Shuffle</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>Shuffle</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Shuffle</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Trials</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:Permutation" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>DontShuffle</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Shuffle</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Trials</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ToList" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TrialList</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumberInBlock</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>SampleTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Index</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialList</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Index</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialBluePrint</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentTrial</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialUpdated</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialList</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BlockLength</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>_ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IsBaited</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsBaitedMode</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateTrial.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>UpdateNextTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialOutcome</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>TrialNumber++</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialNumber</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TrialNumber</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>TrialNumberInBlock</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialNumberInBlock</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Add">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TrialNumberInBlock</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Ensure trial update</Name>
                    <Text><![CDATA[Ensure trial update]]></Text>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialUpdated</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>RunUpdaters</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentTrial</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RightHarvest</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\UpdateAction.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentTrial</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LeftHarvest</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\UpdateAction.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>Rename</scr:Name>
                          <scr:Expression>new(Item1 as RightHarvest, Item2 as LeftHarvest)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>CreateNewTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>UpdatedHarvestActions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentTrial</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="InterTrialInterval" Selector="InterTrialInterval" />
                            <Property Name="QuiescencePeriod" Selector="QuiescencePeriod" />
                            <Property Name="InitiationPeriod" Selector="InitiationPeriod" />
                            <Property Name="ResponsePeriod" Selector="ResponsePeriod" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>UpdatedHarvestActions</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LeftHarvest" Selector="LeftHarvest" />
                            <Property Name="RightHarvest" Selector="RightHarvest" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:Trial" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockLength</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>0</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>